CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
Smooth:[module_num:6|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
    Select the input image:OrigGreen
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:15.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):60,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:OrigGreen
    Name the output image:FilteredNeurons
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness

Smooth:[module_num:9|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
    Select the input image:FilteredNeurons
    Name the output image:SmoothedFilteredNeurons
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothedFilteredNeurons
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.004
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:Cells
    Name the output objects:CellSkeleton
    Select the operation:Skeletonize each object
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    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:CellSkeleton
    Name the output image:SkeletonImage
    Select the color format:Binary (black & white)
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
MeasureNeurons:[module_num:13|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
    Select the seed objects:Nuclei
    Select the skeletonized image:SkeletonImage
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Retain the branchpoint image?:Yes
    Maximum hole size::10
    Export the neuron graph relationships?:Yes
    Intensity image:OrigGreen
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv
